PsychoPy2experiment version="1.82.02"
Settings
  Data filename = u'data' + os.path.sep + expInfo['date']
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'                   uid': u'001', u'            session': u'001'}
  expName = Beat Perception Task
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent text_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A kísérlet befejeződött.

        Köszönjük a részvételt!

        Kérjük, nyomja meg a szóköz billentyűt a kísérletből való kilépéshez.
    KeyboardComponent end_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code
      Begin Experiment:
        sound_1 = sound.Sound('A',secs=1)
    SoundComponent sound_1
      sound [set every repeat] = $sound1
      stopVal [duration (s)] = sound_1.getDuration()
      startVal [time (s)] = 0.0
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    TextComponent text_sound1
      stopVal [duration (s)] = 2
      durationEstim = 12
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine dummypause
    TextComponent text_2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine start
    TextComponent text_start
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Gold-MSI Ütemilleszkedés
        észlelését vizsgáló teszt

        Amennyiben elolvasta az instrukciókat, és nincsen további kérdése, kérjük, nyomja meg a SZÓKÖZ billentyűt a kísérlet indításához.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine decide
    TextComponent decide_text
      wrapWidth = 80
      durationEstim = 10
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Illeszkedtek a pittyegő hangok a zene ütemére,
        vagy el voltak csúszva a zenéhez képest?
        0 = El voltak csúszva, 1 = Illeszedtek
    RatingScaleComponent judgement
      pos = 0, 0.4
      high = 1
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = False
      low = 0
      durationEstim = 10
      categoryChoices = 0,1
      singleClick = True
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    TextComponent text
      wrapWidth = 80
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Mennyire biztos ebben a válaszában?
        1 = Csak tippeltem. 2 = Azt hiszem, hogy helyes.
        3 = Biztos vagyok benne, hogy helyes.
    RatingScaleComponent confidence
      pos = 0, -0.4
      high = 3
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
      durationEstim = 10
      categoryChoices = 1,2,3
      singleClick = True
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  Routine startpause
    TextComponent text_3
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BeatPerception_v10.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'sound1': u'BeatPerception_v10/1_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/2_on.wav', 'correctresp': u'ON'},
      {'sound1': u'BeatPerception_v10/2_phase.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/2_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/3_on.wav', 'correctresp': u'ON'},
      {'sound1': u'BeatPerception_v10/3_phase.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/3_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/4_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/5_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/6_on.wav', 'correctresp': u'ON'},
      {'sound1': u'BeatPerception_v10/6_phase.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/6_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/7_on.wav', 'correctresp': u'ON'},
      {'sound1': u'BeatPerception_v10/7_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/8_phase.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/8_tempo.wav', 'correctresp': u'OFF'},
      {'sound1': u'BeatPerception_v10/9_phase.wav', 'correctresp': u'OFF'}]
    Routine startpause
    Routine trial
    Routine dummypause
    Routine decide
  LoopTerminator trials
  Routine end
